PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = 1.0000, 1.0000, 1.0000
  expName = RSVP
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine WelcomeScreen
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    TextComponent Text_Instructions
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Welcome to the experiment!

        You will be shown a sequence of upright images. Out of all the images there will be one image with a different orientation, either tilted (90°) towards the left, or tilted(90°) towards the right.

        At the end of the trial you have to indicate the orientation of the tilted image by pressing the 'LEFT' key for left orientation or
        the 'RIGHT' key for right orientation.

        Press the 'RIGHT' button to begin.
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Fixation
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    PolygonComponent Fixation_Shape
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.035, 0.035)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine ImageDisplay
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    CodeComponent Code_ImageDisplay
      Code Type = Py
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      Before Experiment:
        import random
        import pandas as pd
        blockData = pd.read_excel('BlockCondition.xlsx')
      Begin Experiment:
        # Experiment Class
        # There is only 1 instance of this for the full experiment

        class experimentData: # not the same as PsychoPy's "thisExp.data"!!!
            def __init__(self):

                # Experiment Global Variables (default values)
                self.readGlobalVars()
                self.blockTrialList = list()
                self.generateAllBlockTrials()
                # Experiment Conditions
                #self.targetOrientList = list()
                #self.distPresentList = list()
                #self.distTypeList = list()
                #self.pseudoRandomExpCond()
                self.screenPosition = (0,0)
                '''
                print("DEBUG STATEMENTS")
                print(self.targetOrientList)
                print(self.distPresentList)
                print(self.distTypeList)
                '''

            # Reads global variables from "" Excel File
            def readGlobalVars(self):
                globalVarDF = pd.read_csv('GlobalVariables.csv', header = 0)
                # print(globalVarDF.to_string())
                self.totalTrialsPerBlock = globalVarDF["TrialsPerBlock"].values[0]   # Save per-block trial count
                self.numBlocks = globalVarDF["TotalBlocks"].values[0]  # HARDCODE or fetch this from somewhere else if needed
                self.totalTrials = self.totalTrialsPerBlock * self.numBlocks  # Adjust total
                self.totalImageCount = globalVarDF["TotalImages"].values[0]
                self.fillerTime = globalVarDF["ImageDisplayTime"].values[0] / 1000 # input in ms, saved as s
                self.targetTime = globalVarDF["ImageDisplayTime"].values[0] / 1000
                self.distractorTime = globalVarDF["ImageDisplayTime"].values[0] / 1000
                #self.targetOffsets = globalVarDF["TargetOffset"].values[0].split("_") #eg. 1_2_8 = [1,2,8]
                #self.targetOffsets = list(int(x) for x in self.targetOffsets)
                self.targetOffsets = list(map(int, globalVarDF["TargetOffset"].values[0].split("_")))
            # Generates a pseudo-randomised list for all possible conditions in a trial
            def generateAllBlockTrials(self):
                distTypes = ["NEGATIVE", "POSITIVE", "NEUTRAL"]
                targetOrients = ["LEFT", "RIGHT"]
                offsets = self.targetOffsets
                # Make all combinations of distType × targetOrient × offset
                trialsPerBlock = self.totalTrialsPerBlock
                conditionPairs = [(d, o) for d in distTypes for o in offsets]
                #Divide dist type equally in blocks

                if trialsPerBlock % (len(distTypes) * len(offsets)) != 0:
                    raise ValueError("TrialsPerBlock must be divisible by number of distractor types for per-block balance.")
                trialsInBlockPerType = trialsPerBlock // len(distTypes)
                self.blockTrialList = []  # Clear in case reused
                allBlocks = []

                # Calculate repetition per condition to fill a block
                #reps = self.totalTrialsPerBlock // len(conditionPairs)
                #remainder = self.totalTrialsPerBlock % len(conditionPairs)

                for block in range(self.numBlocks):
                    blockTrials = []
                    for distType in distTypes:
                        availablePairs = [(distType, o) for o in offsets]
                        reps = trialsInBlockPerType // len(offsets)
                        trials = availablePairs * reps

                        blockTrials.extend(trials)

                    # Shuffle to randomize trial order
                    random.shuffle(blockTrials)
                    trialDicts = []
                    for distType, offset in blockTrials:
                        trialDicts.append({
                            'targetOrient': random.choice(targetOrients),
                            'targetOffset': offset,
                            'distPresent': True,
                            'distType': distType
                        })
                    self.blockTrialList.append(trialDicts)

                    # Create DataFrame
                    dF = pd.DataFrame(blockTrials, columns=["distType", "targetOffset"])
                    dF.insert(0, "Block", block + 1)
                    allBlocks.append(dF)
                    # Debug: Save to CSV

                fulldF = pd.concat(allBlocks, ignore_index=True)
                fulldF.to_csv("block_balanced_pairing.csv", index=False)
                 # Extract the final randomized lists
                #self.distTypeList = dF["distType"].tolist()
                #self.targetOffsetList = dF["targetOffset"].tolist()

        thisExperimentData = experimentData()

        # Generate a flat trial list
        allTrialList = []
        trialIndex = 0
        for blockIndex, blockTrials in enumerate(thisExperimentData.blockTrialList):
            for trialInBlock, trialDict in enumerate(blockTrials):
                trialDict['blockNum'] = blockIndex + 1
                trialDict['trialInBlock'] = trialInBlock + 1
                trialDict['trialGlobalIndex'] = trialIndex
                allTrialList.append(trialDict)
        # Initialize fullExpData once outside the loop
        fields = ["Block No.", "Trial No.", "Target Image", "Target Position", "Target Orientation",
                  "Distractor Position", "Distractor Type", "Distractor Image", "Target-Distractor Lag", "Accuracy", "Response Time"]
        fullExpData = pd.DataFrame(columns=fields)  # Only initialized once
      Begin Routine:
        # ! Start Experiment !
        # at the start of your block loop
        thisExperimentData = experimentData()
        # Experiment Constants
        NumberOfBlocks = thisExperimentData.numBlocks
        trialsPerBlock = thisExperimentData.totalTrialsPerBlock
        totalTrials = thisExperimentData.totalTrials
        totalImageCount = thisExperimentData.totalImageCount
        fillerTime = thisExperimentData.fillerTime
        targetTime = thisExperimentData.targetTime
        distractorTime = thisExperimentData.distractorTime
        targetOffsets = thisExperimentData.targetOffsets

        # Trial Class
        # There is one instance of this for each trial in the experiment
        class routineImgData:
            def __init__(self, trialDict, trialIndex):
                self.trialIndex = trialIndex
                self.running = True
                self.imgCounter = 0
                self.currImg = None
                self.imgDisplayTimer = core.CountdownTimer(0)
                self.images = []
                self.imgDisplayTimes = []

                self.targetOrient = trialDict['targetOrient']
                self.targetOffset = trialDict['targetOffset']
                self.distPresent = trialDict['distPresent']
                self.distType = trialDict['distType']

                self.orderImages()

            # Ready up images to be shown
            def orderImages(self):

                # Determine specific trial's conditions based on global exp data
                # Target
                #self.targetOrient = thisExperimentData.targetOrientList[self.trialIndex]
                #self.targetOffset = thisExperimentData.targetOffsetList[self.trialIndex]
                self.targetPos = random.randint(2 + (self.targetOffset), (totalImageCount) - 3)

                # Distractor
                #self.distPresent = thisExperimentData.distPresentList[self.trialIndex]
                #self.distType = thisExperimentData.distTypeList[self.trialIndex]
                if(self.distPresent):
                    self.distPos = self.targetPos - self.targetOffset
                else:
                    self.distPos = "NA"

                # Add images and display time according to trial conditions
                nonFillerPos = [self.targetPos, self.distPos]
                for i in range(totalImageCount):
                    if(i in nonFillerPos):
                        if(i == self.targetPos):
                            img = pickTargetImg(self.targetOrient)
                            self.imgDisplayTimes.append(targetTime)
                        elif(self.distPresent and i == self.distPos):
                            img = pickDistImg(self.distType)
                            self.imgDisplayTimes.append(distractorTime)
                    else:
                        img = pickFillerImg()
                        self.imgDisplayTimes.append(fillerTime)

                    self.images.append(img)

            # Handles image change and timer updates
            def displayNextImg(self):
                self.imgDisplayTimer.reset()

                if(self.imgCounter > totalImageCount - 1):
                    self.running = False

                # set up things for next image
                if(self.running):
                    self.currImg = self.images[self.imgCounter - 1]
                    self.imgDisplayTimer.addTime(self.imgDisplayTimes[self.imgCounter])
                    self.imgCounter += 1

        # Image Selection Utilities
        def pickTargetImg(orientation): # can be "LEFT" or "RIGHT"
            # ensure correct input
            validOrientation = ["LEFT", "RIGHT"]
            if(orientation not in validOrientation):
                return "INVALID ORIENTATION"

            # pick image at random based on orientation
            # NEED TO PREVENT REPETITIONS
            targetImg = "Images/Target/"
            if(orientation == "LEFT"):
                targetImg += "L" + str(random.randint(1, 79)) + ".jpg"
            elif(orientation == "RIGHT"):
                targetImg += "R" + str(random.randint(1, 80)) + ".jpg"

            return targetImg

        # Filler Image Class
        def pickFillerImg():
            # picks image at random
            # NEED TO PREVENT REPETITIONS
            fillerImg = "Images/Fillers/" + str(random.randint(1, 123)) + ".jpg"
            return fillerImg

        # Distractor Image Class
        def pickDistImg(distType): # can be "NEGATIVE" or "POSITIVE" or "NEUTRAL"
            # ensure correct input
            validType = ["NEGATIVE", "POSITIVE", "NEUTRAL"]
            if(distType not in validType):
                return "INVALID TYPE"

            # pick image at random based on orientation
            # NEED TO PREVENT REPETITIONS
            distImg = "Images/"
            if(distType == "NEGATIVE"):
                distImg += "DistNeg/" + str(random.randint(1, 90)) + ".jpg"
            elif(distType == "POSITIVE"):
                distImg += "DistPos/" + str(random.randint(1, 90)) + ".jpg"
            elif(distType == "NEUTRAL"):
                distImg += "Neutral/" + str(random.randint(1, 90)) + ".jpg"
            return distImg
        # Access current trial using Builder’s loop index
        trialDict = allTrialList[Trials.thisN]

        currRoutine = routineImgData(trialDict, trialDict['trialGlobalIndex'])

        # Store for use in End Routine
        currRoutine.block = trialDict['blockNum']
        currRoutine.trialInBlock = trialDict['trialInBlock']
        currRoutine.trialGlobalIndex = trialDict['trialGlobalIndex']

        # Create trial-specific dictionary with relevant details

        print("Block:", currRoutine.block)       # Debug print to check each trial's parameters

        # Debug print
        #print(f"Block {blockIndex+1}, Trial {trialInBlock+1}: {trialDict}")

        # Initialize routineImgData (custom class) for each trial

        # You can use the routine data for this trial to display the images and capture data

        # Initialise routine data and start running it
      Each Frame:
        # Check if imgDisplayTimer has run out
        if currRoutine.imgDisplayTimer.getTime() <= 0:
            currRoutine.displayNextImg()

        # Check if image display has ended and close routine
        if currRoutine.running == False:
            continueRoutine = False
      End Routine:
        # Extract trial data for export
        if currRoutine.distPresent:
            distImg = currRoutine.images[currRoutine.distPos]
            lag = currRoutine.targetPos - currRoutine.distPos  # this will always be positive and equal to offset
            distPos = currRoutine.distPos + 1
        else:
            distImg = "NA"
            lag = None
            distPos = "NA"

        trialData = [
                    currRoutine.block,  # Access the block number from the loop (if thisN is 0-indexed)
                    trialIndex,
                    currRoutine.images[currRoutine.targetPos],
                    currRoutine.targetPos + 1,
                    currRoutine.targetOrient,
                    distPos,
                    currRoutine.distType,
                    distImg,
                    lag,
                    "NOT ANSWERED YET",  # Placeholder for Accuracy
                    "NOT ANSWERED YET"   # Placeholder for Response Time
                    ]
        # Ensure fullExpData is initialized with column names before using it
        #fullExpData.loc[len(fullExpData)] = trialData

        # If fullExpData is already a DataFrame, you can use .loc to add a row at the trialIndex
        #fullExpData.loc[trialIndex] = trialData
    ImageComponent ImageComponent
      image [set every frame] = $currRoutine.currImg
      size = (400, 300)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent DebugText_CurrImg
      color = black
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $currRoutine.currImg
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    TextComponent DebugText_Timer
      color = black
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $currRoutine.imgDisplayTimer.getTime()
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    TextComponent DebugText_ImgCounter
      color = black
      disabled = True
      letterHeight = 0.05
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      text [set every frame] = $currRoutine.imgCounter
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  Routine InputPhase
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    CodeComponent Code_InputPhase
      Code Type = Py
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      Begin Experiment:
        accuracyText = "DEFAULT"
        correctAnswer = "DEFAULT"
        givenAns = "DEFAULT"
      Begin Routine:
        # At stimulus onset
        rtClock = core.Clock()
        Mouse.clickReset()
        # At stimulus onset, reset the clock
        rtClock.reset()
        responseTime_ms = 0
        givenAns = "NO_CLICK"
      End Routine:
        if currRoutine.targetOrient == "LEFT":
            correctAnswer = "LEFT"
        else:
            correctAnswer = "RIGHT"

        while True:
                mouseState = Mouse.getPressed()  # Get the current mouse state
                if mouseState != [0, 0, 0]:  # If any mouse button is pressed
                    # Check if the left button is pressed
                    if mouseState[0] == 1:  # Left mouse button
                        responseTime_ms = rtClock.getTime() * 1000  # Get response time in ms
                        givenAns = "LEFT"
                        break
                    # Check if the right button is pressed
                    elif mouseState[2] == 1:  # Right mouse button
                        responseTime_ms = rtClock.getTime() * 1000
                        givenAns = "RIGHT"
                        break

        #responseTime_ms = Mouse.time[trialCount - 1] * 1000
        if correctAnswer == givenAns:
            accuracy = True
            accuracyText = "CORRECT"
        else:
            accuracy = False
            accuracyText = "WRONG"

        # Assuming you're using a TrialHandler loop named 'trials'
        #thisExp.addData("Trial No.", trials.thisN + 1)
        thisExp.addData("Accuracy", accuracy)
        thisExp.addData("Answer", givenAns)
        thisExp.addData("Orientation", currRoutine.targetOrient)
        for blockIndex, blockTrials in enumerate(thisExperimentData.blockTrialList):
            for trialInBlock, trialDict in enumerate(blockTrials):
                trialData = [
                    currRoutine.block,  # Access the block number from the loop (if thisN is 0-indexed)
                    trialIndex,                  # Trial Number (or use thisN if preferred)
                    currRoutine.images[currRoutine.targetPos],
                    currRoutine.targetPos + 1,
                    currRoutine.targetOrient,
                    distPos,
                    currRoutine.distType,
                    distImg,
                    lag,
                    int(accuracy),
                    responseTime_ms
                ]
        # Optional: print to check the data
        print(f"final Trial Index: {trialIndex}")  # Ensure trialIndex is initialized and correctly used

        fullExpData.loc[len(fullExpData)] = trialData

        trialIndex += 1  # Increment trialIndex after each trial

        # Update DataFrame
        #fullExpData.loc[trialCount - 1] = currTrialData
        #update trial data file
        # After trial is completed, update accuracy and response time

        #leftKeys = ['left']
        #leftAns = (currRoutine.targetOrient == "LEFT") and (givenAns in leftKeys)

        #rightKeys = ['right']
        #rightAns = (currRoutine.targetOrient == "RIGHT") and (givenAns in rightKeys)
        #if (leftAns or rightAns):
         #   accuracy = True
          #  accuracyText = "CORRECT"
        #else:
         #   accuracy = False
          #  accuracyText = "WRONG"
    MouseComponent Mouse
      correctAns = CorrectAnswer
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent Text_InputPhase
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        What was the orientation of the target image?

        Press "LEFT" or "RIGHT"
  Routine ExitScreen
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    TextComponent Text_Ending
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The experimented has ended.

        Press "SPACE" to exit the application
    KeyboardComponent KeyInput_ExitScreen
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FeedbackPhase
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    CodeComponent code_2
      Code Type = Auto->JS
    TextComponent Text_Feedback
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $accuracyText
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  Routine Break
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        print(fullExpData)

        if BlockNumber == blockNo.trialList[-1]['BlockNumber']:
            continueRoutine = False  # Skip this routine in the last block
    TextComponent text
      color = -1.0000, -0.2157, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = This is a break for one minute. 
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    TextComponent text_2
      color = -1.0000, -0.2157, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 2
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      text:
        Please call the experimenter in the room.

        Click mouse button when you are ready.
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine SavingData
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    TextComponent SavingDataText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = Saving Data...
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    CodeComponent SaveData
      Code Type = Py
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      Begin Experiment:
        # create file and path
        absolutePath = os.path.dirname(__file__)
        relativePath = "CustomData"
        dataSavePath = os.path.join(absolutePath, relativePath)

        fileName = expInfo['participant'] + "_" + expInfo["session"] + "_Data.xlsx"
        filePath = os.path.join(dataSavePath, fileName)
      Begin Routine:
        # Ensure directory exists
        os.makedirs(dataSavePath, exist_ok=True)

        # Save custom data to Excel
        fullExpData.columns = [
            "Block No","Trial No", "Target Image", "Target Position", "Target Orientation",
            "Distractor Position", "Distractor Type", "Distractor Image",
            "Lag", "Accuracy", "Response Time"
        ]
        fullExpData.to_excel(filePath, index=False)
      End Routine:
        # save file to pc storage
        dataDF = pd.DataFrame(data = fullExpData)
        with pd.ExcelWriter(filePath) as writer:
            dataDF.to_excel(writer, sheet_name = expInfo['participant'] + "_" + expInfo["session"], index = False)
Flow
  Routine WelcomeScreen
  LoopInitiator blockNo loopType="TrialHandler"
    conditionsFile = BlockCondition.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'BlockNumber': 1},
      {'BlockNumber': 2},
      {'BlockNumber': 3}]
    LoopInitiator Trials loopType="TrialHandler"
      conditions = [OrderedDict([('TotalTrials', 5), ('TotalImages', 22), ('ImageDisplayTime', 100), ('TargetOffset', 18.0)])]
      isTrials = False
      loopType = random
      nReps = 6
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      Routine Fixation
      Routine ImageDisplay
      Routine InputPhase
      Routine FeedbackPhase
    LoopTerminator Trials
    Routine Break
  LoopTerminator blockNo
  Routine SavingData
  Routine ExitScreen
